includeFile = carbon_200MeVu_water.txt

# Species-resolved direct energy deposition. Categories are mutually exclusive.
# "Other" is reconstructed as Total minus these categories during normalization,
# so electrons, photons, neutrons, and unlisted ions remain energy-accounted.
s:Sc/DepthEnergy/OutputFile = "output/species_reference_total_energy_deposit"
s:Sc/DepthDose/OutputFile = "output/species_reference_total_dose"
s:Sc/PrimaryC12Energy/OutputFile = "output/species_reference_legacy_c12_energy_deposit"

s:Sc/SpeciesPrimaryC12Energy/Quantity = "EnergyDeposit"
s:Sc/SpeciesPrimaryC12Energy/Component = "Phantom"
s:Sc/SpeciesPrimaryC12Energy/OutputFile = "output/species_reference_primary_c12_energy_deposit"
s:Sc/SpeciesPrimaryC12Energy/OutputType = "csv"
s:Sc/SpeciesPrimaryC12Energy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesPrimaryC12Energy/XBins = 1
i:Sc/SpeciesPrimaryC12Energy/YBins = 1
i:Sc/SpeciesPrimaryC12Energy/ZBins = 800
sv:Sc/SpeciesPrimaryC12Energy/Report = 2 "Sum" "Standard_Deviation"
i:Sc/SpeciesPrimaryC12Energy/OnlyIncludeParticlesOfAtomicNumber = 6
i:Sc/SpeciesPrimaryC12Energy/OnlyIncludeParticlesOfAtomicMass = 12
s:Sc/SpeciesPrimaryC12Energy/OnlyIncludeParticlesOfGeneration = "Primary"

s:Sc/SpeciesSecondaryCarbonEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesSecondaryCarbonEnergy/Component = "Phantom"
s:Sc/SpeciesSecondaryCarbonEnergy/OutputFile = "output/species_reference_secondary_carbon_energy_deposit"
s:Sc/SpeciesSecondaryCarbonEnergy/OutputType = "csv"
s:Sc/SpeciesSecondaryCarbonEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesSecondaryCarbonEnergy/XBins = 1
i:Sc/SpeciesSecondaryCarbonEnergy/YBins = 1
i:Sc/SpeciesSecondaryCarbonEnergy/ZBins = 800
sv:Sc/SpeciesSecondaryCarbonEnergy/Report = 2 "Sum" "Standard_Deviation"
i:Sc/SpeciesSecondaryCarbonEnergy/OnlyIncludeParticlesOfAtomicNumber = 6
s:Sc/SpeciesSecondaryCarbonEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesBoronEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesBoronEnergy/Component = "Phantom"
s:Sc/SpeciesBoronEnergy/OutputFile = "output/species_reference_boron_energy_deposit"
s:Sc/SpeciesBoronEnergy/OutputType = "csv"
s:Sc/SpeciesBoronEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesBoronEnergy/XBins = 1
i:Sc/SpeciesBoronEnergy/YBins = 1
i:Sc/SpeciesBoronEnergy/ZBins = 800
sv:Sc/SpeciesBoronEnergy/Report = 2 "Sum" "Standard_Deviation"
i:Sc/SpeciesBoronEnergy/OnlyIncludeParticlesOfAtomicNumber = 5
s:Sc/SpeciesBoronEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesBerylliumEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesBerylliumEnergy/Component = "Phantom"
s:Sc/SpeciesBerylliumEnergy/OutputFile = "output/species_reference_beryllium_energy_deposit"
s:Sc/SpeciesBerylliumEnergy/OutputType = "csv"
s:Sc/SpeciesBerylliumEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesBerylliumEnergy/XBins = 1
i:Sc/SpeciesBerylliumEnergy/YBins = 1
i:Sc/SpeciesBerylliumEnergy/ZBins = 800
sv:Sc/SpeciesBerylliumEnergy/Report = 2 "Sum" "Standard_Deviation"
i:Sc/SpeciesBerylliumEnergy/OnlyIncludeParticlesOfAtomicNumber = 4
s:Sc/SpeciesBerylliumEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesLithiumEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesLithiumEnergy/Component = "Phantom"
s:Sc/SpeciesLithiumEnergy/OutputFile = "output/species_reference_lithium_energy_deposit"
s:Sc/SpeciesLithiumEnergy/OutputType = "csv"
s:Sc/SpeciesLithiumEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesLithiumEnergy/XBins = 1
i:Sc/SpeciesLithiumEnergy/YBins = 1
i:Sc/SpeciesLithiumEnergy/ZBins = 800
sv:Sc/SpeciesLithiumEnergy/Report = 2 "Sum" "Standard_Deviation"
i:Sc/SpeciesLithiumEnergy/OnlyIncludeParticlesOfAtomicNumber = 3
s:Sc/SpeciesLithiumEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesHeliumEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesHeliumEnergy/Component = "Phantom"
s:Sc/SpeciesHeliumEnergy/OutputFile = "output/species_reference_helium_energy_deposit"
s:Sc/SpeciesHeliumEnergy/OutputType = "csv"
s:Sc/SpeciesHeliumEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesHeliumEnergy/XBins = 1
i:Sc/SpeciesHeliumEnergy/YBins = 1
i:Sc/SpeciesHeliumEnergy/ZBins = 800
sv:Sc/SpeciesHeliumEnergy/Report = 2 "Sum" "Standard_Deviation"
i:Sc/SpeciesHeliumEnergy/OnlyIncludeParticlesOfAtomicNumber = 2
s:Sc/SpeciesHeliumEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"

s:Sc/SpeciesProtonEnergy/Quantity = "EnergyDeposit"
s:Sc/SpeciesProtonEnergy/Component = "Phantom"
s:Sc/SpeciesProtonEnergy/OutputFile = "output/species_reference_proton_energy_deposit"
s:Sc/SpeciesProtonEnergy/OutputType = "csv"
s:Sc/SpeciesProtonEnergy/IfOutputFileAlreadyExists = "Overwrite"
i:Sc/SpeciesProtonEnergy/XBins = 1
i:Sc/SpeciesProtonEnergy/YBins = 1
i:Sc/SpeciesProtonEnergy/ZBins = 800
sv:Sc/SpeciesProtonEnergy/Report = 2 "Sum" "Standard_Deviation"
sv:Sc/SpeciesProtonEnergy/OnlyIncludeParticlesNamed = 1 "proton"
s:Sc/SpeciesProtonEnergy/OnlyIncludeParticlesOfGeneration = "Secondary"
