includeFile = carbon_200MeVu_water_species.txt

# Fragment-model calibration baseline. Promote to the 1e6 reference only after QA.
i:So/CarbonBeam/NumberOfHistoriesInRun = 100000
s:Sc/DepthEnergy/OutputFile = "output/species_development_total_energy_deposit"
s:Sc/DepthDose/OutputFile = "output/species_development_total_dose"
s:Sc/PrimaryC12Energy/OutputFile = "output/species_development_legacy_c12_energy_deposit"
s:Sc/SpeciesPrimaryC12Energy/OutputFile = "output/species_development_primary_c12_energy_deposit"
s:Sc/SpeciesSecondaryCarbonEnergy/OutputFile = "output/species_development_secondary_carbon_energy_deposit"
s:Sc/SpeciesBoronEnergy/OutputFile = "output/species_development_boron_energy_deposit"
s:Sc/SpeciesBerylliumEnergy/OutputFile = "output/species_development_beryllium_energy_deposit"
s:Sc/SpeciesLithiumEnergy/OutputFile = "output/species_development_lithium_energy_deposit"
s:Sc/SpeciesHeliumEnergy/OutputFile = "output/species_development_helium_energy_deposit"
s:Sc/SpeciesProtonEnergy/OutputFile = "output/species_development_proton_energy_deposit"
