includeFile = carbon_200MeVu_water_species.txt

# Fast syntax/geometry/filter check. This is not a physics reference run.
i:So/CarbonBeam/NumberOfHistoriesInRun = 100
s:Sc/DepthEnergy/OutputFile = "output/species_smoke_total_energy_deposit"
s:Sc/DepthDose/OutputFile = "output/species_smoke_total_dose"
s:Sc/PrimaryC12Energy/OutputFile = "output/species_smoke_legacy_c12_energy_deposit"
s:Sc/SpeciesPrimaryC12Energy/OutputFile = "output/species_smoke_primary_c12_energy_deposit"
s:Sc/SpeciesSecondaryCarbonEnergy/OutputFile = "output/species_smoke_secondary_carbon_energy_deposit"
s:Sc/SpeciesBoronEnergy/OutputFile = "output/species_smoke_boron_energy_deposit"
s:Sc/SpeciesBerylliumEnergy/OutputFile = "output/species_smoke_beryllium_energy_deposit"
s:Sc/SpeciesLithiumEnergy/OutputFile = "output/species_smoke_lithium_energy_deposit"
s:Sc/SpeciesHeliumEnergy/OutputFile = "output/species_smoke_helium_energy_deposit"
s:Sc/SpeciesProtonEnergy/OutputFile = "output/species_smoke_proton_energy_deposit"
